PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Meditation
  keyboardBackend = ioHub
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Routines
  Routine on_med
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    SoundComponent sound_1
      sound = C
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine off_med
    SoundComponent sound_2
      sound = E
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine welcome
    TextComponent text_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        testing LSL
        (press space to continue)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine on_med
    Routine off_med
  LoopTerminator trials
